CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. ', 'You can also specify a set of rules to include only the desired files in your selected folders.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Frame "0")
    Name to assign these images:CFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Frame "1")
    Name to assign these images:YFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Frame "2")
    Name to assign these images:RFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Frame "3")
    Name to assign these images:DIC_YFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets ', '(groups) which will be processed independently of each other. Examples of groupings ', 'include screening batches, microtiter plates, time-lapse movies, etc.']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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identifies nuclei based on CFP fluorescence image. Adapt thresholding based on your images. Declumps nuclei based on object shape.', 'Typical values for diameter and thresholding:', '20-1, 20-2, 40-2, 40-3: 35 120, TCF: 0.95  / 0.9', '40-1: 35 120, TCF: 0.87', 'GL2i: 35 120, TCF: 0.9 ', 'Untreated: 35 120, TCF: 0.95', '', 'Smoothing scale: 4.0464']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
    Select the input image:CFP
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):35,120
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:4.0464
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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
MeasureObjectSizeShape:[module_num:6|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notes:['Measures size and shape of identified nuclei in CFP image.']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
    Select object sets to measure:Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

FilterObjects:[module_num:7|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notes:['Filters nuclei based on measured circularity.']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
    Select the objects to filter:Nuclei
    Name the output objects:FilteredNuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0.4
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
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
Threshold:[module_num:8|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
    Select the input image:CFP
    Name the output image:CFP_threshold
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MaskImage:[module_num:9|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
    Select the input image:CFP_threshold
    Name the output image:CFP_maskednuclei
    Use objects or an image as a mask?:Objects
    Select object for mask:FilteredNuclei
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    Invert the mask?:Yes

Watershed:[module_num:10|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
    Select the input image:CFP_maskednuclei
    Name the output object:CFP_backgroundarea
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:8
    Downsample:1
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

MeasureImageIntensity:[module_num:11|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notes:['Measures intensity of each channel in the defined background area.']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
    Select images to measure:CFP, DIC_YFP, RFP, YFP
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:CFP_backgroundarea
    Calculate custom percentiles:No
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
ImageMath:[module_num:12|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:RFP_subtractedbackground
    Image or measurement?:Image
    Select the first image:RFP
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
    Select the second image:MaskBlue
    Multiply the second image by:1.0
    Measurement:Intensity_MeanIntensity_RFP_CFP_backgroundarea

ImageMath:[module_num:13|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:YFP_subtractedbackground
    Image or measurement?:Image
    Select the first image:YFP
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
    Select the second image:MaskBlue
    Multiply the second image by:1.0
    Measurement:Intensity_MeanIntensity_YFP_CFP_backgroundarea

ImageMath:[module_num:14|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:CFP_subtractedbackground
    Image or measurement?:Image
    Select the first image:CFP
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
    Select the second image:MaskBlue
    Multiply the second image by:1.0
    Measurement:Intensity_MeanIntensity_CFP_CFP_backgroundarea

MeasureObjectIntensity:[module_num:15|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notes:['Measures intensity of CFP, DIC, RFP and YFP fluorescence for each identified and filtered nucleus.']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enabled:False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
    Select images to measure:CFP, DIC_YFP, RFP, YFP
    Select objects to measure:FilteredNuclei

MeasureObjectIntensity:[module_num:16|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
    Select images to measure:CFP_subtractedbackground, DIC_YFP, RFP_subtractedbackground, YFP_subtractedbackground
    Select objects to measure:FilteredNuclei

MeasureObjectSizeShape:[module_num:17|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notes:['Measures size and shape of each identified and filtered nucleus.']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
    Select object sets to measure:FilteredNuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

OverlayOutlines:[module_num:18|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notes:['Overlays outlines of filtered nuclei over the image in the DIC channel.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DIC_YFP
    Name the output image:OrigOverlay
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:FilteredNuclei

SaveImages:[module_num:19|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notes:['Saves image to selected folder.']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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:CFP
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|OneDrive - University of Cambridge\\3rd Year (II)\\Research Project\\08022024\\Analysis
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:20|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notes:['Exports intensity/size and shape data to an Excel spreadsheet, saved in the selected folder.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|OneDrive - University of Cambridge\\3rd Year (II)\\Research Project\\08022024\\Analysis
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:NucleusSegmentation_
    Overwrite existing files without warning?:Yes
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