CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '', "Click 'Extract metadata' below to continue. Click 'Update' in the top left-hand corner of the table below to view the metadata extracted from uploaded files."]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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image/the channels of each image by which other modules will refer to it. Use the metadata and Names and Types module to identify channels.', 'E.g.:', 'CFP channel: used to image mCerulean-H2B fluorescence, allowing identification of entire nucleus throughout the cell cycle. This facilitates single-cell tracking.', 'YFP channel: used to image mVenus-hGemini fluorescence, accumulating in S/G2/M phase nuclei and allowing identification of cells in S/G2/M.', 'RFP channel: used to image mCherry-hCdt1 fluorescence, accumulating in G1 phase nuclei and allowing identification of cells in G1.', 'DIC channel: differential interference contrast (DIC) images of cells, enhancing contrast of brightfield images for visualisation of transparent whole cells.', '', "Click 'Update' in the top left-hand corner of the table below to split merged image files into individual channels, with each individual channel shown in its own labelled column.", '', 'NOTE: Ensure that the frame numbers associated with each channel (below) match those associated with your image files!']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Frame "0")
    Name to assign these images:CFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Frame "1")
    Name to assign these images:YFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Frame "2")
    Name to assign these images:RFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Frame "3")
    Name to assign these images:DIC
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identifies nuclei based on mCerulean-H2B fluorescence in CFP channel image. Adapt thresholding based on your images. Declumps nuclei based on object shape.', 'Based on FUCCI cells imaged on Olympus IX81 microscope using 20x objective. ', '', 'Parameters which can be adjusted to optimise nucleus identification (thresholding):', '', 'Nucleus diameter: 35-120 pixel units - adjust based on observed diameter of nuclei in your images. ', '', "Threshold smoothing scale - smoothing improves the uniformity of the identified objects, and this value may need to be adjusted to improve identification of nuclei. Increasing this value will increase smoothing of CFP staining before thresholding to make identified nuclei more uniform. Decreasing this value will reduce smoothing before thresholding, which may allow more accurate capturing of the detail in nucleus shape in the identified nuclei. The scale should be approximately the size of the artifacts to be eliminated by smoothing. A Gaussian is used with a sigma adjusted so that 1/2 of the Gaussian's distribution falls within the diameter given by the scale (sigma = scale/0.674). ", '', 'Threshold correction factor - this can be increased to make nucleus identification more stringent, and decrease to make nucleus identification more lenient.']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
    Select the input image:CFP
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):35,120
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:4.0464
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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
IdentifyObjectsManually:[module_num:6|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notes:["Allows manual identification of an object to use as the background region for measurement of background intensities in each channel. Press the 'F' key to begin selecting a region, then circle a small region (approximately the same size as the nuclei in the image) in an area with no cells present (indicated by the lack of fluorescent signal in the CFP channel).", '', 'These are saved as a .csv data file, and the mean intensities of each channel in this region should be used to manually subtract background from measured nuclear intensities. These are outputted by the pipeline as a separate .csv file.']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
    Select the input image:CFP
    Name the objects to be identified:Background_Intensity

MeasureObjectSizeShape:[module_num:7|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notes:["Measures various size and shape parameters for each nucleus identified from CFP image. We are interested in the circularity of identified nuclei, which will be used by subsequent module 'FilterObjects' to filter nuclei based on measured circularity."]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
    Select object sets to measure:Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

FilterObjects:[module_num:8|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notes:['Filters nuclei based on measured circularity to exclude objects with an extreme irregular shape, which may be the result of identification of multiple nuclei as a single nucleus.']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
    Select the objects to filter:Nuclei
    Name the output objects:FilteredNuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0.7
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
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
MeasureObjectIntensity:[module_num:9|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notes:['Measures intensity of CFP, DIC, RFP and YFP fluorescence within each filtered nucleus.']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
    Select images to measure:CFP, RFP, YFP
    Select objects to measure:Background_Intensity, FilteredNuclei

MeasureObjectSizeShape:[module_num:10|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notes:['Measures various size and shape parameters for each filtered nucleus.']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
    Select object sets to measure:FilteredNuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

OverlayOutlines:[module_num:11|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notes:['Overlays detected outlines of filtered nuclei over the image in the CFP channel for later reference.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CFP
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#F807F1
    Select objects to display:FilteredNuclei

SaveImages:[module_num:12|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notes:['Saves CFP image with overlaid nucleus boundaries to the default output folder, which can be set under File > Preferences... > Default Output Folder.']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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:CFP
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|OneDrive - University of Cambridge\\3rd Year (II)\\Research Project\\08022024\\Analysis
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:13|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notes:['Exports intensity/size and shape data to an Excel spreadsheet, saved in the default output folder, which can be set under File > Preferences... > Default Output Folder. Change ConditionName for each condition before running analysis.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|OneDrive - University of Cambridge\\3rd Year (II)\\Research Project\\08022024\\Analysis
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:NucleusSegmentation_ConditionName_
    Overwrite existing files without warning?:Yes
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